CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:original
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:original
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:6|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notes:['The yeast patches will be segmented, but, despite cropping the image, there will still be plate edges that get segmented, too. Therefore, any object will be referred to as a "pre-spot" that will next be filtered to remove artifactual objects.']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
    Select the input image:Threshold
    Name the primary objects to be identified:Prespots
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3448
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    Manual threshold:0.1
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
DefineGrid:[module_num:7|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notes:['The pipeline up to this point has identified yeast patches that are whole and not speckled. We do not want to leave speckled patches out of the analysis, so we will take advantage of the geometry of the plate. The patches were arrayed in a grid and the DefineGrid module will take advantage of this fact. It requires whole patches in 3 of the 4 corners to work, so the experimental design and platemap should become aligned with the image analysis.']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
    Name the grid:Grid
    Number of rows:7
    Number of columns:4
    Location of the first spot:Top left
    Order of the spots:Columns
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Manual
    Select the previously identified objects:Prespots
    Select the method to define the grid manually:Mouse
    Select the image to display:original
    Coordinates of the first cell:130,41
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:401,590
    Row number of the second cell:7
    Column number of the second cell:4
    Retain an image of the grid?:Yes
    Name the output image:Grid
    Select the image on which to display the grid:original
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:8|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
    Select the defined grid:Grid
    Name the objects to be identified:NaturalSpots
    Select object shapes and locations:Natural Shape and Location
    Specify the circle diameter automatically?:Automatic
    Circle diameter:20
    Select the guiding objects:Prespots

EditObjectsManually:[module_num:9|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
    Select the objects to be edited:NaturalSpots
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:original
    Allow overlapping objects?:No

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:EditedObjects
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:original
    Name the output image:OutlinedFinal
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:EditedObjects

DisplayDataOnImage:[module_num:12|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
    Display object or image measurements?:Object
    Select the input objects:EditedObjects
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:OutlinedFinal
    Text color:red
    Name the output image that has the measurements displayed:FinalObjectNumbers
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
ClassifyObjects:[module_num:13|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:EditedObjects
    Select the measurement to classify by:Location_Center_Y
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0,100,200,250,350,450,550
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Row0,Row1,Row2,Row3,Row4,Row5,Row6,Row7
    Retain an image of the classified objects?:Yes
    Name the output image:ClassifiedImage
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:EditedObjects
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:OutlinedFinal
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OutlinedFinal
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FinalOutline
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\Results on Binary Images - Final\\wt\\Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Object_Areas
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\Results on Binary Images - Final\\wt\\Object Areas
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ClassifiedImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Rows
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Results on Binary Images - Final\\wt\\Rows
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:FinalObjectNumbers
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FinalObjectNumber
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Results on Binary Images - Final\\wt\\Object Numbers
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Results on Binary Images - Final\\wt\\Spreadsheets
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:EditedObjects|Number_Object_Number,EditedObjects|Location_Center_Y,EditedObjects|Location_Center_X,EditedObjects|AreaShape_Perimeter,EditedObjects|AreaShape_FormFactor,EditedObjects|AreaShape_MeanRadius,EditedObjects|AreaShape_Orientation,EditedObjects|AreaShape_MinFeretDiameter,EditedObjects|AreaShape_Solidity,EditedObjects|AreaShape_MaxFeretDiameter,EditedObjects|AreaShape_EulerNumber,EditedObjects|AreaShape_Eccentricity,EditedObjects|AreaShape_Compactness,EditedObjects|AreaShape_Extent,EditedObjects|AreaShape_MedianRadius,EditedObjects|AreaShape_MaximumRadius,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SpotAsssayQuant_
    Overwrite existing files without warning?:Yes
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